PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = event_design
  Screen = 1
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Routines
  Routine trial
    PolygonComponent square
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    StaticComponent inter_trial_interval
      stopVal [duration (s)] = $iti
      startVal [time (s)] = 1
    KeyboardComponent keyboard
      stopVal [duration (s)] = 1.0
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = event_rt.csv
    random seed = 1
    loopType = random
    nReps = 2
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    conditions:
      [{u'iti': 2},
      {u'iti': 4},
      {u'iti': 6},
      {u'iti': 8},
      {u'iti': 10},
      {u'iti': 12},
      {u'iti': 14},
      {u'iti': 16}]
    Routine trial
  LoopTerminator trials
